PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'version': u'A', u'participant': u''}
  expName = devalCombined
  Units = use prefs
  Screen = 1
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Routines
  Routine A
    CodeComponent A_counter
      End Routine:
        pressL=0 #reset left button count
        pressR=0 #reset right button count
      Each Frame:
        if tilt > 0: #keep vending upright
         tilt = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['t']): #tilt left
         tilt = -15

        if event.getKeys(['v']): #tilt right
         tilt=15
    ImageComponent vendingA_image
      stopVal [duration (s)] = 1.0
      ori [set every frame] = $tilt
      startVal [time (s)] = 0.0
      image = vend.png
      size = [1.5, 2]
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    ImageComponent rewardA_image
      stopVal [duration (s)] = 1.0
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      image = $rewardA
      size = [0.4, 0.5]
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  Routine rate_Teddies
    RatingScaleComponent teddy_rating
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
      singleClick = True
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    ImageComponent teddy_ratingImage
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      image = teddy.png
      size = [0.4, 0.5]
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    TextComponent teddy_ratingText
      color = LightGray
      text = How much do you like tiny teddies?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = .075
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  Routine Trial
    CodeComponent counterbalancing
      Begin Experiment:
        if expInfo['version'] == 'A':
           rewardA = 'M&M.png'
           rewardB = 'BBQ.png'
           devalvid = 'mmcockroach.avi'
           logging.log(level=logging.DATA, msg = 'version A')
        if expInfo['version'] == 'B':
           rewardA = 'BBQ.png'
           rewardB = 'M&M.png'
           devalvid = 'mmcockroach.avi'
           logging.log(level=logging.DATA, msg = 'version B')
        if expInfo['version'] == 'C':
           rewardA = 'M&M.png'
           rewardB = 'BBQ.png'
           devalvid = 'bbqcockroach.avi'
           logging.log(level=logging.DATA, msg = 'version C')
        if expInfo['version'] == 'D':
           rewardA = 'BBQ.png'
           rewardB = 'M&M.png'
           devalvid = 'bbqcockroach.avi'
           logging.log(level=logging.DATA, msg = 'version D')
    CodeComponent checkKeys
      Begin Experiment:
        #initialise counters
        pressL=0
        pressR=0
        tilt=0
      Begin Routine:
        VR=randint(5,10)
      Each Frame:
        if tilt > 0: #keep vending upright
         tilt  = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['c']): #tilt left
         pressL = pressL+1
         pressR = 0
         tilt = -15

        if pressL>VR: #win A
         logging.log(level=logging.DATA, msg = 'win A')
         nRepA=1
         nRepB=0
         continueRoutine=False

        if event.getKeys(['m']): #tilt right
         pressR=pressR+1
         pressL=0
         tilt=15

        if pressR>VR: #win B
         logging.log(level=logging.DATA, msg = 'win B')
         nRepA=0
         nRepB=1
         continueRoutine=False
    ImageComponent vending_machine
      ori [set every frame] = $tilt
      startVal [time (s)] = 0.0
      image = vend.png
      size = [1.5, 2]
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  Routine B
    CodeComponent B_counter
      End Routine:
        pressL=0 #reset left button count
        pressR=0 #reset right button count
      Each Frame:
        if tilt > 0: #keep vending upright
         tilt = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['c']): #tilt left
         tilt = -15

        if event.getKeys(['m']): #tilt right
         tilt=15
    ImageComponent vendingB_image
      stopVal [duration (s)] = 1.0
      ori [set every frame] = $tilt
      startVal [time (s)] = 0.0
      image = vend.png
      size = [1.5, 2]
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    ImageComponent rewardB_image
      stopVal [duration (s)] = 1.0
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      image = $rewardB
      size = [0.4, 0.5]
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  Routine feedback
    CodeComponent feedback_code
      Begin Experiment:
        nTest=25
        Error=6
      Begin Routine:
        if test_response.corr:
          msg1="correct!"
          logging.log(level=logging.DATA, msg = 'correct')
          Error=Error-1
        else:
          msg1="Oops! That was wrong"
          logging.log(level=logging.DATA, msg = 'Oops!')
          Error=6
      End Routine:
        logging.flush()
        if Error<1:
         tests.finished=True
    TextComponent feedback_text
      color = LightGray
      text [set every repeat] = $msg1
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.1
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  Routine rate_Hunger
    RatingScaleComponent Hunger_rating
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
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    TextComponent Hunger_text
      color = LightGray
      text = How hungry are you right now?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine hunger
    RatingScaleComponent Hunger_rating_2
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
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    TextComponent Hunger_text_2
      color = LightGray
      text = How hungry are you right now?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine instr
    CodeComponent init
      Begin Experiment:
        tilt=0
        pressL = 0.0
        pressR = 0.0
    TextComponent test_trigger
      color = LightGray
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
        Now, as before, you can tilt the machine for different snacks but you won't be shown any snacks on screen. The amount earned will be recorded.

        Try to get as many snacks as you want as this will determine what you will eat afterwards!

                   Press space to begin
    KeyboardComponent trigger_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Teddies
    RatingScaleComponent teddy_rating_2
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
      singleClick = True
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    ImageComponent teddy_ratingImage_2
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      image = teddy.png
      size = [0.4, 0.5]
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    TextComponent teddy_ratingText_2
      color = LightGray
      text = How much do you like tiny teddies?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = .075
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  Routine rate_BBQ
    RatingScaleComponent BBQ_rating
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
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    ImageComponent BBQ_ratingImage
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      image = BBQ.png
      size = [0.4, 0.5]
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    TextComponent BBQ_ratingText
      color = LightGray
      text = How much do you like BBQ Mini Crackers?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine deval_video
    MovieComponent devalVid
      movie [set every repeat] = $devalvid
      stopVal [duration (s)] = 30
      forceEndRoutine = False
      No audio = True
      startVal [time (s)] = 0.0
      backend = moviepy
      size = [1200, 500]
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  Routine trial
    CodeComponent keycode
      Begin Experiment:
        dur = 0
      Begin Routine:
        tilt = 0
        pressL_d = 0.0
        pressR_d = 0.0

        logging.log(level=logging.DATA, msg = 'start deval')
      End Routine:
        #save data
        trials.addData('pressL', pressL_d)
        trials.addData('pressR', pressR_d)

        logging.log(level=logging.DATA, msg = 'end deval')

        wonA_dev = pressL_d/5
        wonB_dev = pressR_d/5
      Each Frame:
        if tilt > 0:
         tilt  = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['c']):
         pressL_d = pressL_d+1
         tilt = -15

        if event.getKeys(['m']):
         pressR_d=pressR_d+1
         tilt = 15
    ImageComponent CSimage
      stopVal [duration (s)] = 24
      durationEstim = 24
      ori [set every frame] = $tilt
      startVal [time (s)] = 0
      image = vend.png
      size = [1.5, 2]
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  Routine rate_MMs
    RatingScaleComponent MM_rating
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
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    ImageComponent MM_ratingImage
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      image = M&M.png
      size = [0.4, 0.5]
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    TextComponent MM_ratingText
      color = LightGray
      text = How much do you like M&Ms?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine finish
    TextComponent finish_text
      color = LightGray
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
          Thankyou!

        End of Stage 1
    CodeComponent end_instru_log
      Begin Routine:
        logging.log(level=logging.DATA, msg = 'end instru')
  Routine devalCounter
    TextComponent devalCount_instr
      color = LightGray
      text = Final Score
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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    ImageComponent deval_snackA
      pos = [-0.4, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $rewardA
      size = [0.5, 0.5]
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    ImageComponent deval_snackB
      pos = [0.4, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $rewardB
      size = [0.5, 0.5]
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    TextComponent devalscore
      text [set every repeat] = $u"%3i                         %3i"%(wonA_dev, wonB_dev)
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent end_counter
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine MMs
    RatingScaleComponent MM_rating_2
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
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    ImageComponent MM_ratingImage_2
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      image = M&M.png
      size = [0.4, 0.5]
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    TextComponent MM_ratingText_2
      color = LightGray
      text = How much do you like M&Ms?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine devalVid_instr
    TextComponent text
      color = LightGray
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
        Something has happened to one of the snacks!

        Watch now to see what happened...

                   Press SPACE to start.
    KeyboardComponent startDevalVid
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine test
    CodeComponent test_code
      Begin Routine:
        if nRepB == 1:
          testImage=rewardB
          correctAns='m'
        if nRepA == 1:
          testImage=rewardA
          correctAns='c'
    TextComponent test_question
      color = LightGray
      text = Which direction did you tilt to get:
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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    TextComponent test_instructions
      color = LightGray
      text = Press left or right button
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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    ImageComponent test_image
      startVal [time (s)] = 0.0
      image [set every repeat] = $testImage
      size = [0.4, 0.5]
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    KeyboardComponent test_response
      correctAns = $correctAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'c','m'
      startVal [time (s)] = 1
      store = first key
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  Routine finishEND
    TextComponent finish_text_2
      color = LightGray
      text = Thankyou!
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine BBQ
    RatingScaleComponent BBQ_rating_2
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
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    ImageComponent BBQ_ratingImage_2
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      image = BBQ.png
      size = [0.4, 0.5]
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    TextComponent BBQ_ratingText_2
      color = LightGray
      text = How much do you like BBQ Mini Crackers?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine instructions
    TextComponent Instructions_text
      wrapWidth = 2
      color = LightGray
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
        Someone has said you can get free
        snacks from our vending machine.

        Use the 'C' and 'M' keys to tilt the
        machine to the left and right, and
        learn how to steal different snacks!




                   Press space to begin
    KeyboardComponent spacetobegin
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent log_instru
      End Routine:
        logging.log(level=logging.DATA, msg = 'start instru')
Flow
  Routine rate_MMs
  Routine rate_BBQ
  Routine rate_Hunger
  Routine instructions
  LoopInitiator tests loopType="TrialHandler"
    loopType = random
    nReps = nTest
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine Trial
      LoopInitiator repA loopType="TrialHandler"
        loopType = random
        nReps = nRepA
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        Routine A
      LoopTerminator repA
      LoopInitiator repB loopType="TrialHandler"
        loopType = random
        nReps = nRepB
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        Routine B
      LoopTerminator repB
    LoopTerminator trials
    Routine test
    Routine feedback
  LoopTerminator tests
  Routine finish
  Routine devalVid_instr
  LoopInitiator vidLoop loopType="TrialHandler"
    loopType = random
    nReps = 8
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    Routine deval_video
  LoopTerminator vidLoop
  Routine instr
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine trial
  LoopTerminator trials_2
  Routine MMs
  Routine BBQ
  Routine hunger
  Routine devalCounter
  Routine finishEND
